neuron izhikevich_tutorialc21a21f2a4e645e7bbe0935e48638809:

    state:
        v mV = -65 mV    # Membrane potential in mV
        u real = 0    # Membrane potential recovery variable

    equations:
        v' = (.04 * v * v / mV + 5 * v + (140 - u) * mV + (I_e * GOhm)) / ms
        u' = a * (b * v - u * mV) / (mV * ms)

    parameters:
        a real = .02    # describes time scale of recovery variable
        b real = .2    # sensitivity of recovery variable
        c mV = -65 mV    # after-spike reset value of v
        d real = 8.    # after-spike reset value of u

    input:
        spikes <- spike
        I_e pA <- continuous

    output:
        spike

    update:
        integrate_odes()

        # add synaptic current
        v += spikes * mV * s

        # threshold crossing
        if v >= 30mV:
            v = c
            u += d
            emit_spike()
